<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:Bonsai.JonsUtils;assembly=Bonsai.JonsUtils"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>HeadstageNeuropixelsV1eTS</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>pathName</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Value" DisplayName="startTimeBN" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>NP_startTime_.csv</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{0}/{1}</Format>
          <Selector>Item1,Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>../../../Documents/data\Tests\raw_data\condition\_2025-10-20_16-56-20/NP_startTime_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
          <io:Selector>Timestamp,Value</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:PortStatus">
          <onix1:DeviceName>HeadstageNeuropixelsV1e/PortController</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="PortStatusBN" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NP_PortStatus_.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>port-status_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Clock,Value.StatusCode</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:NeuropixelsV1eData">
          <onix1:DeviceName>HeadstageNeuropixelsV1e/NeuropixelsV1</onix1:DeviceName>
          <onix1:BufferSize>36</onix1:BufferSize>
          <onix1:OrderByDepth>false</onix1:OrderByDepth>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LfpData</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>LFP</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="LFPDataBaseName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NP_LFPdata_.raw</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <DueTime>PT1S</DueTime>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:NeuropixelsV1eData">
          <onix1:DeviceName>HeadstageNeuropixelsV1e/NeuropixelsV1</onix1:DeviceName>
          <onix1:BufferSize>36</onix1:BufferSize>
          <onix1:OrderByDepth>false</onix1:OrderByDepth>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SpikeData</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Spikes</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Channels" DisplayName="NPXChannelsOE" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>3</dsp:int>
            <dsp:int>5</dsp:int>
            <dsp:int>6</dsp:int>
            <dsp:int>7</dsp:int>
            <dsp:int>9</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>11</dsp:int>
            <dsp:int>13</dsp:int>
            <dsp:int>14</dsp:int>
            <dsp:int>15</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="port" DisplayName="NPXPortOE" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:OpenCVMatUDPClient">
          <p1:addr>localhost</p1:addr>
          <p1:port>9002</p1:port>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="spikeDataBaseName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NP_spikes_.raw</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <DueTime>PT1S</DueTime>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:NeuropixelsV1eData">
          <onix1:DeviceName>HeadstageNeuropixelsV1e/NeuropixelsV1</onix1:DeviceName>
          <onix1:BufferSize>36</onix1:BufferSize>
          <onix1:OrderByDepth>false</onix1:OrderByDepth>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="clockBaseName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NP_timestamps_.raw</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai">
        <DueTime>PT1S</DueTime>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Spikes</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>LFP</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="onix1:PolledBno055Data">
            <onix1:DeviceName>HeadstageNeuropixelsV1e/PolledBno055</onix1:DeviceName>
            <onix1:PolledRegisters>All</onix1:PolledRegisters>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>pathName</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="Value" DisplayName="BNOBName" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>NP_BNO_.csv</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:CombineLatest" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{0}/{1}</Format>
          <Selector>Item1,Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>bno055_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Clock,EulerAngle,Quaternion,Acceleration,Gravity,Temperature</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Quaternion</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="OpenEphys.Commutator:AutoCommutator.bonsai">
          <PortName>COM4</PortName>
          <Enable>true</Enable>
          <EnableLed>true</EnableLed>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="16" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="26" Label="Source2" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="41" Label="Source1" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="34" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="35" To="38" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="51" Label="Source1" />
      <Edge From="45" To="48" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="55" Label="Source1" />
      <Edge From="54" To="55" Label="Source2" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="57" To="64" Label="Source1" />
      <Edge From="58" To="61" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source2" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>