<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="dataBaseName" Description="Base name of files for recording of ePhys signals" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OE_32ch_data_.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="animalID" Description="ID of the animal" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Mouse</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{2}/{1}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\Manip1\Documents\data\data.bin</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>pathName</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="timestampsBaseName" Description="Base name for file saving webcam timestamps" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>OE_timestamps_.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/{2}/{1}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\Manip1\Documents\data\ts.bin</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source3" />
      <Edge From="4" To="16" Label="Source3" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="19" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>